<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.7.3"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:harp="clr-namespace:Bonsai.Harp;assembly=Bonsai.Harp"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="harp:CreateMessage">
        <harp:Payload xsi:type="harp:CreateOperationControlPayload">
          <harp:MessageType>Write</harp:MessageType>
          <harp:OperationMode>Standby</harp:OperationMode>
          <harp:DumpRegisters>false</harp:DumpRegisters>
          <harp:MuteReplies>false</harp:MuteReplies>
          <harp:VisualIndicators>Off</harp:VisualIndicators>
          <harp:OperationLed>Off</harp:OperationLed>
          <harp:Heartbeat>Disabled</harp:Heartbeat>
        </harp:Payload>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="IntProperty">
          <Value>0</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="harp:Format">
        <harp:MessageType>Write</harp:MessageType>
        <harp:Register xsi:type="harp:TimestampSeconds" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Merge" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="harp:Device">
          <harp:OperationMode>Active</harp:OperationMode>
          <harp:OperationLed>On</harp:OperationLed>
          <harp:DumpRegisters>true</harp:DumpRegisters>
          <harp:VisualIndicators>On</harp:VisualIndicators>
          <harp:Heartbeat>Disabled</harp:Heartbeat>
          <harp:IgnoreErrors>false</harp:IgnoreErrors>
          <harp:PortName>COMx</harp:PortName>
        </Combinator>
      </Expression>
      <Expression xsi:type="harp:FilterMessage">
        <harp:Register xsi:type="harp:CoreVersionHigh" />
      </Expression>
      <Expression xsi:type="harp:Parse">
        <harp:Register xsi:type="harp:TimestampedDeviceName" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Seconds</Selector>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Value</Selector>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="3" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="2" To="3" Label="Source2" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="4" To="6" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="6" To="8" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>