<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.8.0-rc1"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System"
                 xmlns:sys="clr-namespace:System;assembly=mscorlib"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:harp="clr-namespace:Bonsai.Harp;assembly=Bonsai.Harp"
                 xmlns:dsp="clr-namespace:Bonsai.Dsp;assembly=Bonsai.Dsp"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="PropertySource" TypeArguments="io:CsvWriter,sys:String">
        <MemberName>FileName</MemberName>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Take">
          <rx:Count>1</rx:Count>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:AsyncSubject">
        <Name>RootPath</Name>
      </Expression>
      <Expression xsi:type="rx:BehaviorSubject" TypeArguments="harp:HarpMessage">
        <rx:Name>Commands</rx:Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="harp:Device">
          <harp:OperationMode>Active</harp:OperationMode>
          <harp:OperationLed>On</harp:OperationLed>
          <harp:DumpRegisters>true</harp:DumpRegisters>
          <harp:VisualIndicators>On</harp:VisualIndicators>
          <harp:Heartbeat>Disabled</harp:Heartbeat>
          <harp:IgnoreErrors>false</harp:IgnoreErrors>
          <harp:PortName>COMx</harp:PortName>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:PublishSubject">
        <Name>Events</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Events</Name>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>LogHarpDemux</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="rx:GroupBy">
              <rx:KeySelector>Address,MessageType</rx:KeySelector>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="LogName" />
            </Expression>
            <Expression xsi:type="rx:SelectMany">
              <Name>LogHarp</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="rx:AsyncSubject">
                    <Name>Data</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>RootPath</Name>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Value" DisplayName="LogName" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="StringProperty">
                      <Value>BehaviorEvents</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Data</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Key</Selector>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Zip" />
                  </Expression>
                  <Expression xsi:type="Format">
                    <Format>{0}/{1}/{2}_{3}.bin</Format>
                    <Selector>Item1,Item2,Item3.Item2,Item3.Item1</Selector>
                  </Expression>
                  <Expression xsi:type="rx:AsyncSubject">
                    <Name>LogName</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Data</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Merge" />
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>MessageBytes</Selector>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>LogName</Name>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="Path" Selector="it" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="dsp:MatrixWriter">
                      <dsp:Suffix>None</dsp:Suffix>
                      <dsp:Overwrite>false</dsp:Overwrite>
                      <dsp:Layout>ColumnMajor</dsp:Layout>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="2" To="8" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="8" Label="Source2" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="7" To="8" Label="Source3" />
                  <Edge From="8" To="9" Label="Source1" />
                  <Edge From="9" To="10" Label="Source1" />
                  <Edge From="11" To="12" Label="Source1" />
                  <Edge From="12" To="13" Label="Source1" />
                  <Edge From="13" To="16" Label="Source1" />
                  <Edge From="14" To="15" Label="Source1" />
                  <Edge From="15" To="16" Label="Source2" />
                  <Edge From="16" To="17" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="3" Label="Source1" />
            <Edge From="2" To="3" Label="Source2" />
            <Edge From="3" To="4" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>