<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.8.5"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:wie="clr-namespace:Bonsai.Windows.Input;assembly=Bonsai.Windows.Input"
                 xmlns:p1="clr-namespace:Harp.Hobgoblin;assembly=Harp.Hobgoblin"
                 xmlns:harp="clr-namespace:Bonsai.Harp;assembly=Bonsai.Harp"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="wie:KeyDown">
          <wie:Filter>A</wie:Filter>
          <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
        </Combinator>
      </Expression>
      <Expression xsi:type="p1:CreateMessage">
        <harp:MessageType>Write</harp:MessageType>
        <harp:Payload xsi:type="p1:CreateDigitalOutputSetPayload">
          <p1:DigitalOutputSet>GP15</p1:DigitalOutputSet>
        </harp:Payload>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="wie:KeyDown">
          <wie:Filter>S</wie:Filter>
          <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
        </Combinator>
      </Expression>
      <Expression xsi:type="p1:CreateMessage">
        <harp:MessageType>Write</harp:MessageType>
        <harp:Payload xsi:type="p1:CreateDigitalOutputClearPayload">
          <p1:DigitalOutputClear>GP15</p1:DigitalOutputClear>
        </harp:Payload>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Merge" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p1:Device">
          <harp:OperationMode>Active</harp:OperationMode>
          <harp:OperationLed>On</harp:OperationLed>
          <harp:DumpRegisters>true</harp:DumpRegisters>
          <harp:VisualIndicators>On</harp:VisualIndicators>
          <harp:Heartbeat>Disabled</harp:Heartbeat>
          <harp:IgnoreErrors>false</harp:IgnoreErrors>
          <harp:PortName>COM7</harp:PortName>
        </Combinator>
      </Expression>
      <Expression xsi:type="p1:Parse">
        <harp:Register xsi:type="p1:TimestampedDigitalOutputSet" />
      </Expression>
      <Expression xsi:type="p1:Parse">
        <harp:Register xsi:type="p1:TimestampedDigitalOutputClear" />
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="4" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="3" To="4" Label="Source2" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="5" To="7" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>