<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.8.5"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:p1="clr-namespace:Harp.Hobgoblin;assembly=Harp.Hobgoblin"
                 xmlns:harp="clr-namespace:Bonsai.Harp;assembly=Bonsai.Harp"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Timer">
          <rx:DueTime>PT3S</rx:DueTime>
          <rx:Period>PT0S</rx:Period>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:Sink">
        <Name>StimOn</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="p1:CreateMessage">
              <harp:MessageType>Write</harp:MessageType>
              <harp:Payload xsi:type="p1:CreateDigitalOutputSetPayload">
                <p1:DigitalOutputSet>GP15</p1:DigitalOutputSet>
              </harp:Payload>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>Hobgoblin Commands</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="rx:SelectMany">
        <Name>Response</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>Hobgoblin Events</Name>
            </Expression>
            <Expression xsi:type="p1:Parse">
              <harp:Register xsi:type="p1:DigitalInputState" />
            </Expression>
            <Expression xsi:type="rx:Condition">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="Equal">
                    <Operand xsi:type="WorkflowProperty" TypeArguments="p1:DigitalInputs">
                      <Value>GP2</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="rx:Sink">
        <Name>StimOff</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="p1:CreateMessage">
              <harp:MessageType>Write</harp:MessageType>
              <harp:Payload xsi:type="p1:CreateDigitalOutputClearPayload">
                <p1:DigitalOutputClear>GP15</p1:DigitalOutputClear>
              </harp:Payload>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>Hobgoblin Commands</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Repeat" />
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>