<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.8.5"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:p1="clr-namespace:Harp.Hobgoblin;assembly=Harp.Hobgoblin"
                 xmlns:harp="clr-namespace:Bonsai.Harp;assembly=Bonsai.Harp"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:scr="clr-namespace:Bonsai.Scripting.Expressions;assembly=Bonsai.Scripting.Expressions"
                 xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p1:Device">
          <harp:OperationMode>Active</harp:OperationMode>
          <harp:OperationLed>On</harp:OperationLed>
          <harp:DumpRegisters>true</harp:DumpRegisters>
          <harp:VisualIndicators>On</harp:VisualIndicators>
          <harp:Heartbeat>Disabled</harp:Heartbeat>
          <harp:IgnoreErrors>false</harp:IgnoreErrors>
          <harp:PortName>COM7</harp:PortName>
        </Combinator>
      </Expression>
      <Expression xsi:type="p1:Parse">
        <harp:Register xsi:type="p1:TimestampedAnalogData" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Seconds</Selector>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Value</Selector>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>AnalogInput0</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Zip" />
      </Expression>
      <Expression xsi:type="scr:ExpressionTransform">
        <scr:Expression>new(Item1 as Timestamp, Item2 as AnalogInput0)</scr:Expression>
      </Expression>
      <Expression xsi:type="io:CsvWriter">
        <io:FileName>analog_input.csv</io:FileName>
        <io:Append>false</io:Append>
        <io:Overwrite>false</io:Overwrite>
        <io:Suffix>Timestamp</io:Suffix>
        <io:IncludeHeader>true</io:IncludeHeader>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="1" To="3" Label="Source1" />
      <Edge From="2" To="5" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="4" To="5" Label="Source2" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>