<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.8.1"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:harp="clr-namespace:Bonsai.Harp;assembly=Bonsai.Harp"
                 xmlns:wie="clr-namespace:Bonsai.Windows.Input;assembly=Bonsai.Windows.Input"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="rx:BehaviorSubject" TypeArguments="harp:HarpMessage">
        <rx:Name>DeviceCommands</rx:Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="harp:Device">
          <harp:OperationMode>Active</harp:OperationMode>
          <harp:OperationLed>On</harp:OperationLed>
          <harp:DumpRegisters>true</harp:DumpRegisters>
          <harp:VisualIndicators>On</harp:VisualIndicators>
          <harp:Heartbeat>Disabled</harp:Heartbeat>
          <harp:IgnoreErrors>false</harp:IgnoreErrors>
          <harp:PortName>COMx</harp:PortName>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:PublishSubject">
        <Name>DeviceEvents</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="wie:KeyDown">
          <wie:Filter>None</wie:Filter>
          <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:SelectMany">
        <Name>RequestTimestamp</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="harp:CreateMessage">
              <harp:MessageType>Read</harp:MessageType>
              <harp:Payload xsi:type="harp:CreateWhoAmIPayload">
                <harp:WhoAmI>0</harp:WhoAmI>
              </harp:Payload>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>DeviceCommands</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>DeviceEvents</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="harp:FilterMessageType">
                <harp:FilterType>Include</harp:FilterType>
                <harp:MessageType>Read</harp:MessageType>
              </Combinator>
            </Expression>
            <Expression xsi:type="harp:Parse">
              <harp:Register xsi:type="harp:TimestampedWhoAmI" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Seconds</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item2</Selector>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="8" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source2" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Zip" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="harp:CreateTimestamped" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Value</Selector>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Value</Selector>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="3" To="5" Label="Source1" />
      <Edge From="4" To="5" Label="Source2" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="6" To="8" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>